<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha015"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Settings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="PropertySource" TypeArguments="cv:FileCapture,sys:String">
              <MemberName>FileName</MemberName>
              <Value>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.avi</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>VideoFileName</Name>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="cv:FileCapture,sys:String">
              <MemberName>FileName</MemberName>
              <Value>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.csv</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CsvFileName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>500</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>500</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="Item1,Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="cv:CropCenter,p1:Size">
              <MemberName>Size</MemberName>
              <Value>
                <Width>500</Width>
                <Height>500</Height>
              </Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CropSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ScalingFactor</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LoggingRootPath</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DataLoader</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoFileName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:ScanPattern>%i %i %i %d %d </io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoFileName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FileCapture">
                <cv:FileName>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.avi</cv:FileName>
                <cv:PlaybackRate>99999999</cv:PlaybackRate>
                <cv:StartPosition>0</cv:StartPosition>
                <cv:PositionUnits>Frames</cv:PositionUnits>
                <cv:Loop>false</cv:Loop>
                <cv:Playing>true</cv:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Video&amp;Stimuli</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaFeeds</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>Background</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoFileName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="NumberBackgroundFrames" />
                    <Property Name="PixelSearch" />
                    <Property Name="NoiseThreshold" />
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>CalculateBackground</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="NumberBackgroundFrames" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>10</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>NumberBackgroundFrames</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="FileName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.avi</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>FileName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>FileName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FileName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:FileCapture">
                            <cv:FileName>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.avi</cv:FileName>
                            <cv:PlaybackRate>99999999</cv:PlaybackRate>
                            <cv:StartPosition>0</cv:StartPosition>
                            <cv:PositionUnits>Frames</cv:PositionUnits>
                            <cv:Loop>false</cv:Loop>
                            <cv:Playing>true</cv:Playing>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:Grayscale" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="PixelSearch" />
                          <Property Name="NoiseThreshold" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="bz:CalculateBackground">
                            <bz:PixelSearch>Brightest</bz:PixelSearch>
                            <bz:NoiseThreshold>0</bz:NoiseThreshold>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>NumberBackgroundFrames</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Count" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>10</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Last" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="13" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="16" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BackgroundImage</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>FindArenas</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>128</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>Binary</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:FindContours">
                      <cv:Mode>ConnectedComponent</cv:Mode>
                      <cv:Method>ChainApproxNone</cv:Method>
                      <cv:Offset>
                        <cv:X>0</cv:X>
                        <cv:Y>0</cv:Y>
                      </cv:Offset>
                      <cv:MinArea>20000</cv:MinArea>
                      <cv:MaxArea>200000</cv:MaxArea>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:BinaryRegionAnalysis" />
                  </Expression>
                  <Expression xsi:type="rx:OrderBy">
                    <rx:KeySelector>Centroid.X,Centroid.Y</rx:KeySelector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ArenaROIs</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>CropBackgrounds</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ArenaROIs</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>CropBackgroundArenas</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Centroid</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ArenaCentroid</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>BackgroundImage</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ArenaCentroid</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CropSize</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Size" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:CropCenter">
                            <cv:Size>
                              <cv:Width>500</cv:Width>
                              <cv:Height>500</cv:Height>
                            </cv:Size>
                            <cv:FillValue>
                              <cv:Val0>0</cv:Val0>
                              <cv:Val1>0</cv:Val1>
                              <cv:Val2>0</cv:Val2>
                              <cv:Val3>0</cv:Val3>
                            </cv:FillValue>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="9" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CroppedBackground</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>CreateArenaFeeds</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ArenaROIs</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoFileName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>TrackArenas</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="FileName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.avi</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>FileName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CroppedBackground</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CropSize</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Size" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>CropCenter</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>This</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>This</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2.Centroid</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>ArenaCentroid</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>This</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>ThisCropBackground</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Video&amp;Stimuli</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ArenaCentroid</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Size" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="cv:CropCenter">
                                  <cv:Size>
                                    <cv:Width>500</cv:Width>
                                    <cv:Height>500</cv:Height>
                                  </cv:Size>
                                  <cv:FillValue>
                                    <cv:Val0>0</cv:Val0>
                                    <cv:Val1>0</cv:Val1>
                                    <cv:Val2>0</cv:Val2>
                                    <cv:Val3>0</cv:Val3>
                                  </cv:FillValue>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisCropBackground</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:CombineLatest" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:AbsoluteDifference" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisCropBackground</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="cv:EqualizeHistogram" />
                              </Expression>
                              <Expression xsi:type="Annotation">
                                <Name>Unclear why this is needed</Name>
                                <Text><![CDATA[]]></Text>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="cv:Threshold">
                                  <cv:ThresholdValue>70</cv:ThresholdValue>
                                  <cv:MaxValue>255</cv:MaxValue>
                                  <cv:ThresholdType>Binary</cv:ThresholdType>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:CombineLatest" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisCropBackground</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:CombineLatest" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ArenaCentroid</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:CombineLatest" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
Item1 as RawFrame,
Item2 as BackgroundSubtractedFrame,
Item3 as ThresholdedBackground,
Item4 as RawBackground,
Item5 as ArenaCentroid)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="14" Label="Source1" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="14" To="16" Label="Source1" />
                              <Edge From="15" To="16" Label="Source2" />
                              <Edge From="16" To="18" Label="Source1" />
                              <Edge From="16" To="24" Label="Source1" />
                              <Edge From="16" To="27" Label="Source1" />
                              <Edge From="16" To="30" Label="Source1" />
                              <Edge From="16" To="32" Label="Source1" />
                              <Edge From="17" To="18" Label="Source2" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="32" Label="Source2" />
                              <Edge From="20" To="21" Label="Source1" />
                              <Edge From="21" To="23" Label="Source1" />
                              <Edge From="22" To="23" Label="Source2" />
                              <Edge From="23" To="24" Label="Source2" />
                              <Edge From="24" To="25" Label="Source1" />
                              <Edge From="25" To="32" Label="Source3" />
                              <Edge From="26" To="27" Label="Source2" />
                              <Edge From="27" To="28" Label="Source1" />
                              <Edge From="28" To="32" Label="Source4" />
                              <Edge From="29" To="30" Label="Source2" />
                              <Edge From="30" To="31" Label="Source1" />
                              <Edge From="31" To="32" Label="Source5" />
                              <Edge From="32" To="33" Label="Source1" />
                              <Edge From="33" To="34" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="8" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="11" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ArenaFeeds</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>AnalysisPipeline</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaFeeds</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>ProcessSingleArenaFrames</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>Data</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ArenaIndex</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>ArenaVideoStream</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ArenaVideoStream</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>BackgroundSubtractedFrame</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>100</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>Binary</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:FindContours">
                      <cv:Mode>External</cv:Mode>
                      <cv:Method>ChainApproxNone</cv:Method>
                      <cv:Offset>
                        <cv:X>0</cv:X>
                        <cv:Y>0</cv:Y>
                      </cv:Offset>
                      <cv:MinArea>3</cv:MinArea>
                      <cv:MaxArea xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:BinaryRegionAnalysis" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:LargestBinaryRegion" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Centroid</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>21</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>Binary</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:FindContours">
                      <cv:Mode>External</cv:Mode>
                      <cv:Method>ChainApproxNone</cv:Method>
                      <cv:Offset>
                        <cv:X>0</cv:X>
                        <cv:Y>0</cv:Y>
                      </cv:Offset>
                      <cv:MinArea>3</cv:MinArea>
                      <cv:MaxArea xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:BinaryRegionAnalysis" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:LargestBinaryRegion" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Centroid</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename</scr:Name>
                    <scr:Expression>new(
Item1 as SoftCentroid,
Item2 as HardCentroid)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>PickBestCentroid</scr:Name>
                    <scr:Expression>it.SoftCentroid.X &gt; 0 ? it.SoftCentroid : it.HardCentroid</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>BestCentroid</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ArenaIndex</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ArenaVideoStream</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>BackgroundSubtractedFrame</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BestCentroid</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CropCenter">
                      <cv:Size>
                        <cv:Width>72</cv:Width>
                        <cv:Height>72</cv:Height>
                      </cv:Size>
                      <cv:FillValue>
                        <cv:Val0>0</cv:Val0>
                        <cv:Val1>0</cv:Val1>
                        <cv:Val2>0</cv:Val2>
                        <cv:Val3>0</cv:Val3>
                      </cv:FillValue>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>CenteredVideo</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>PixelChange???</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BestCentroid</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ScalingFactor</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>NormalizedBestCentroid</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Logging</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LoggingRootPath</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ArenaIndex</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}/Arena{1}</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisArenaPath</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Metadata</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ArenaVideoStream</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>ThresholdedBackground</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisArenaPath</Name>
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}/ThresholdedBackground.png</Format>
                                <Selector>it</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="FileName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="cv:SaveImage">
                                  <cv:FileName>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test/Arena3/ThresholdedBackground.png</cv:FileName>
                                  <cv:Suffix>None</cv:Suffix>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ArenaVideoStream</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>RawBackground</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisArenaPath</Name>
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}/RawBackground.png</Format>
                                <Selector>it</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="FileName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="cv:SaveImage">
                                  <cv:FileName>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test/Arena3/RawBackground.png</cv:FileName>
                                  <cv:Suffix>None</cv:Suffix>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ArenaVideoStream</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>ArenaCentroid</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisArenaPath</Name>
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}/ArenaCentroid.csv</Format>
                                <Selector>it</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="FileName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="io:CsvWriter">
                                <io:FileName>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test/Arena3/ArenaCentroid.csv</io:FileName>
                                <io:Append>false</io:Append>
                                <io:Overwrite>false</io:Overwrite>
                                <io:Suffix>None</io:Suffix>
                                <io:IncludeHeader>true</io:IncludeHeader>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="6" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="13" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source2" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="20" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="20" Label="Source2" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Streams</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ArenaVideoStream</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>RawFrame</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisArenaPath</Name>
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}/RawVideo.avi</Format>
                                <Selector>it</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="FileName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="cv:VideoWriter">
                                  <cv:FileName>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test/Arena3/RawVideo.avi</cv:FileName>
                                  <cv:Suffix>None</cv:Suffix>
                                  <cv:Buffered>true</cv:Buffered>
                                  <cv:Overwrite>false</cv:Overwrite>
                                  <cv:FourCC>FMP4</cv:FourCC>
                                  <cv:FrameRate>30</cv:FrameRate>
                                  <cv:FrameSize>
                                    <cv:Width>0</cv:Width>
                                    <cv:Height>0</cv:Height>
                                  </cv:FrameSize>
                                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>CenteredVideo</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisArenaPath</Name>
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}/CenteredVideo.avi</Format>
                                <Selector>it</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="FileName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="cv:VideoWriter">
                                  <cv:FileName>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test/Arena3/CenteredVideo.avi</cv:FileName>
                                  <cv:Suffix>None</cv:Suffix>
                                  <cv:Buffered>true</cv:Buffered>
                                  <cv:Overwrite>false</cv:Overwrite>
                                  <cv:FourCC>FMP4</cv:FourCC>
                                  <cv:FrameRate>30</cv:FrameRate>
                                  <cv:FrameSize>
                                    <cv:Width>0</cv:Width>
                                    <cv:Height>0</cv:Height>
                                  </cv:FrameSize>
                                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>BestCentroid</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>NormalizedBestCentroid</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Name>Header</scr:Name>
                                <scr:Expression>new(Item1 as Centroid, Item2 as NormalizedCentroid)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisArenaPath</Name>
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}/BestCentroid.csv</Format>
                                <Selector>it</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="FileName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="io:CsvWriter">
                                <io:FileName>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test/Arena3/BestCentroid.csv</io:FileName>
                                <io:Append>false</io:Append>
                                <io:Overwrite>false</io:Overwrite>
                                <io:Suffix>None</io:Suffix>
                                <io:IncludeHeader>true</io:IncludeHeader>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="6" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="7" To="12" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source2" />
                              <Edge From="13" To="15" Label="Source1" />
                              <Edge From="14" To="15" Label="Source2" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="20" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="20" Label="Source2" />
                            </Edges>
                          </Workflow>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="11" To="17" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="22" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="26" To="34" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="30" Label="Source1" />
                  <Edge From="29" To="30" Label="Source2" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="36" To="38" Label="Source1" />
                  <Edge From="37" To="38" Label="Source2" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item1</rx:KeySelector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>StimuliCSV</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>VideoFileName</Name>
              </Expression>
              <Expression xsi:type="ipy:PythonTransform">
                <ipy:Script>from System.IO import Path

@returns(str)
def process(value):
  return Path.ChangeExtension(value,".csv")</ipy:Script>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="io:CsvReader">
                <io:FileName>C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.csv</io:FileName>
                <io:ScanPattern>%i %i %i %d %d </io:ScanPattern>
                <io:SkipRows>0</io:SkipRows>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item3</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="rx:ReplaySubject">
                <Name>Stimuli</Name>
                <rx:BufferSize xsi:nil="true" />
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="3" To="5" Label="Source1" />
              <Edge From="3" To="6" Label="Source1" />
              <Edge From="4" To="7" Label="Source1" />
              <Edge From="5" To="7" Label="Source2" />
              <Edge From="6" To="7" Label="Source3" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Visualizers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaFeeds</Name>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BackgroundSubtractedFrame</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaFeeds</Name>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BackgroundSubtractedFrame</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaFeeds</Name>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BackgroundSubtractedFrame</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaFeeds</Name>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BackgroundSubtractedFrame</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>1</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="20" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="18" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>